PsychoPy2experiment version="2022.1.3"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'], expInfo['visit'])
  Experiment info = {'participant': '', 'visit': '001/002', 'handedness(l/r/a)': 'r'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [3440, 1440]
  expName = 220627_SST_ABCD_practice_version
  keyboardBackend = ioHub
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Routines
  Routine TitlePage
    TextComponent text_titlepage
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        SST-practice

        Please press 6 or 7 to continue.
    KeyboardComponent key_resp_titlepage
      allowedKeys = '6','7', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_titlepage
      Code Type = Auto->JS
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      Before Experiment:
        '''
        PI: BJ Casey

        Stop Signal Task
        - Optional practice block (25 trials, ~1min)
        - 2 test runs; ~5min each
        - 300 "Go" trials, 60 variable-delay "stop" trials; divided equally between the 2 runs
        - "Stop" trials are separated by 3-7 "go" trials
        - "Go" trials:
            + R/L arrow displayed for up to 1000ms
            + if there is a response, screen immediately advances to a fixation cross, otherwise, arrow remains for 1000ms
            + fixation cross displayed for 1000ms - "go" duration + jitter
        - Variable-delay "Stop" trails:
            + R/L arrow (SSD) displayed for 0-900ms; duration is adjusted on a trial-by-trial basis; starting at 50ms, duration is increased or decreased by 50ms (up to a max duration of 900ms) based on the the subject's performance/accuracy on prior "stop" trial (i.e. if previous stop trial was incorrect, the SSD duration of the next stop trial is decreased by 50ms; if previous stop trial was correct, the SSD duration of the next stop trial is increased by 50ms. If a response is detected within this window, screen immediately advances to fixation cross.
            + "stop" signal (up arrow) is displayed for 100-300ms; note: variable "go" duration + "stop" signal duration not to exceed 1000ms.
            + fixation cross displayed for 1000ms - variable "go" duration - "stop" signal duration(if presented) + jitter
        '''
      Begin Experiment:
        right_arrow_key = 'MIDDLE'
        left_arrow_key = 'POINTER'

        if expInfo['handedness(l/r/a)'] == 'l':
            right_arrow_key = 'POINTER'
            left_arrow_key = 'MIDDLE'
  Routine TestReady
    CodeComponent code_testready
      Code Type = Auto->JS
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      Begin Experiment:
        test_ready_instructions = 'We are now ready to begin the game!\nREMEMBER: When you see the LEFT arrow, \npress your %s finger.\nWhen you see the RIGHT arrow, \npress your %s finger.\nIf you see an UP arrow, STOP yourself from pressing to the left or the right arrow.\nPress the correct key as FAST as you can. Stopping and going are equally important!\n\nPress your index or middle finger to continue.'%(left_arrow_key,right_arrow_key)
    TextComponent text_testready
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $test_ready_instructions
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    KeyboardComponent key_resp_testready
      allowedKeys = '6', '7', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Waiting4Scanner
    TextComponent text_waiting4scanner
      letterHeight = 0.05
      startVal [time (s)] = 1
      text = Waiting for scanner...
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    KeyboardComponent key_resp_waiting4scanner
      allowedKeys = 'apostrophe'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_scanner_wait
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine BeginFix
    TextComponent text_beginfix
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine Go_Stop_trial
    CodeComponent code_go_stop_trial
      Code Type = Auto->JS
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      Begin Experiment:
        trial_count = 0
        # Xi added performance red flags
        # Correct Go < 60%
        PF_CG = 0
        # Incorrect Go > 30%
        PF_IG = 0
        # Late Go > 30%
        PF_LG = 0
        # Go Omissions > 30%
        PF_GO = 0

        Go_trial_count = 0
        VST_count = 0
        # Stop Success Rate < 20% or > 80%
        PF_SSR = 0
        # Stop Fail RT > Go RT by any amount (1ms or greater)
        PF_SFRTvGRT = 0
        CG = 0
        IG = 0
        LG = 0
        GO = 0
        SC = 0
        SF = 0
        SF_RT = 0
        SF_RT_sum = 0
        Go_RT = 0
        Go_RT_sum = 0
        PFlag_CG = 0
        PFlag_IG = 0
        PFlag_LG = 0
        PFlag_GO = 0
        PFlag_SSR = 0

        go_stop_trial_dur = 1
        SSD = .05
        PrevStopACC = 0
        STEflag = 0
        STEcount = 0
        STEadjstop_nback = 0
        updated_trial_label = ''
        prev_VST_trial_num = 0
        real_stop_nback = 0
        block_variable_stop_trial_success_percentage = 0
      Begin JS Routine:
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                        } else {
                            SSD = (SSD - 0.1);
                            STEflag = 0;
                        }
                    }
                }
                go_stop_trial_dur = SSD;
                image_stop_dur = 0.3;
            }
        }
        /*
        Xi changed image_stop_due to be .3 on variable stop trials based on the changes in 2021.
        However, this change is not reflected in the 2018 e-prime files.
        Issue 4 (short Stop Signal durations when SSD is long):
        Xi made sure SSDmin is 50ms: • The task has been changed to have a fixed Stop Signal duration.
        “We have changed the task to ensure that the Stop signal duration is always 300 msec in duration, a change which we believe will have a negligible impact on any longitudinal comparisons.” (Garavan et al., 2021, p. 13)
        Issue 2 (no Go stimuli at 0 SSD): • “To avoid potential confusion, the task has been modified to ensure that the SSD does not drop below 50 msec thereby ensuring presentation of the Go stimulus on all trials. ” (Garavan et al., 2021, p. 12)*/
      Begin Routine:
        if STEflag == 1:
            trial_type = 'VariableStopTrial'

        if trial_type == 'GoTrial':
            go_stop_trial_dur = 1
            image_stop_dur = 0
        elif trial_type == 'VariableStopTrial':
            if STEflag == 0:
                if VST_count > 0:
                    SSD = SSD + (PrevStopACC*2-1) *.05
                    # if the previous VST inhibition is successful, the next VST gets harder with longer SSD
                    # if the previous VST inhibition is unsuccessful, the next VST gets easier with shorter SSD
                    if SSD < .05:
                        SSD = .05
                        # based on the paper, SSD min will be 50ms, so the go sign will always be presented on VSTs
                    elif SSD > .9:
                        SSD = .9
                        # this is the SSDmax in ABCD's version
                        # it appears that VST length >1sec is later compensated by shorter end fixation duration (5s by default)
                        # however, this is not shown in the ABCD's script
                # first ever stop trial, SSD is defaulted to be 50ms
            elif STEflag == 1:
                if SSD < .1:
                    SSD = .05
                    STEflag = 0
                else:
                    SSD = SSD - .1
                    STEflag = 0
            go_stop_trial_dur = SSD
            image_stop_dur = .3
        '''
        Xi changed image_stop_due to be .3 on variable stop trials based on the changes in 2021.
        However, this change is not reflected in the 2018 e-prime files.
        Issue 4 (short Stop Signal durations when SSD is long):
        Xi made sure SSDmin is 50ms: • The task has been changed to have a fixed Stop Signal duration.
            “We have changed the task to ensure that the Stop signal duration is always 300 msec in duration, a change which we believe will have a negligible impact on any longitudinal comparisons.” (Garavan et al., 2021, p. 13)
        Issue 2 (no Go stimuli at 0 SSD): • “To avoid potential confusion, the task has been modified to ensure that the SSD does not drop below 50 msec thereby ensuring presentation of the Go stimulus on all trials. ” (Garavan et al., 2021, p. 12)
        '''
      Each Frame:
        '''STE (stop trigger error): any key press before the stop sign comes up on the variable stop trials
        If response is made during the SSD:
        1. Flag trial as an STE
        2. Change next trialtype to a VariableStopTrial
        3. Increase the Stop_nback count for the next trial
        '''


        '''
        If STEflag = 1 Then
         If SSDDur < 100 Then
          SSDDur = 50
          STEflag = 0
         Else
          SSDDur = SSDDur - 100
          STEflag = 0
         End If
        '''
      End Routine:
        if trial_type == 'VariableStopTrial':
            if key_resp_go_stop_trial.keys in ['', [], None]:
                STEflag = 0
            else:
                STEflag = 1
                image_stop_dur = 0
    ImageComponent image_stimulus
      image [set every frame] = $stimulus
      size = (1.2, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $go_stop_trial_dur
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    KeyboardComponent key_resp_go_stop_trial
      allowedKeys [set every repeat] = '6', '7'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $go_stop_trial_dur
      store = first key
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    ImageComponent image_stop
      image [set every frame] = images/Stop_Arrow.BMP
      size = (1.2, 1.2)
      startVal [time (s)] = $go_stop_trial_dur
      stopVal [duration (s)] = $image_stop_dur
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    KeyboardComponent key_resp_image_stop
      allowedKeys [set every repeat] = '6', '7'
      correctAns = None
      forceEndRoutine = False
      startVal [time (s)] = $go_stop_trial_dur
      stopVal [duration (s)] = $image_stop_dur
      store = first key
      storeCorrect = True
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  Routine Fix
    CodeComponent code_fix
      Code Type = Auto->JS
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      Begin Experiment:
        FixDur = 0

        '''
        double check: does this mean correct response during the fixation
        is also coded as hit?
        'Set TrialCode
        If Go.ACC = 1 Or Fix.RESP = c.GetAttrib("CorrectAnswer") Then
         c.SetAttrib "TrialCode", "CorrectGo"
        Else
         c.SetAttrib "TrialCode", "IncorrectGo"
        End If
        '''
      Begin Routine:
        #Calculate trial fixation duration (GoFixDur = Hold - GoRT + Jitter)
        if trial_type == 'GoTrial':
            if key_resp_go_stop_trial.keys != None:
                FixDur = 1 - key_resp_go_stop_trial.rt
            else:
                FixDur = 0
        elif trial_type == 'VariableStopTrial':
            if STEflag == 0:
                if SSD > .7:
                    FixDur = 0
                else:
                    FixDur = 1 - (SSD + image_stop_dur)
            if STEflag == 1:
                FixDur = 1 - key_resp_go_stop_trial.rt

        '''
        The original ABCD's script is conflicting with the
        new change that the STOPdur will always be .3s when
        STEflag != 1:

            'Check to see if StopDur <> 0
        If StopDur = 0 Then
         StopDurAdj = StopDur
        Else
         If c.GetAttrib("StopSignal.RT") > 0 Then
          StopDurAdj = c.GetAttrib("StopSignal.RT")
         Else
          StopDurAdj = StopDur
         End If
        End If

        the 2nd condition, if there is a key press during the
        stop signal, this first rt will be used to increase
        the duration of the fixation. This is conflicting because
        the stop duration is always .3ms and even if there is a key
        press during the stop duration, the stop signal will not
        terminate. So this 2nd condition is not implemented in our version.
        '''
    TextComponent text_fix
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FixDur
      text [set every repeat] = +
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    KeyboardComponent key_resp_fix
      allowedKeys [set every repeat] = '6', '7'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $FixDur
      store = first key
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  Routine EndFix
    CodeComponent code_endfix
      Code Type = Auto->JS
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      Begin Routine:
        final_end_fix_dur = end_fix_dur - end_fix_duration_adj
      End Routine:
        thisExp.addData('final_end_fix_dur', final_end_fix_dur)
        thisExp.addData('run_counter', run_counter)
        thisExp.addData('trial_count', trial_count)
        thisExp.addData('block_trial_count', block_trial_count)

        #block_feedback
        if block_PF_CG < .6:
            Block_PFlag_CG = 1
        else:
            Block_PFlag_CG = 0

        if block_PF_IG > .3:
            Block_PFlag_IG = 1
        else:
            Block_PFlag_IG = 0

        if block_PF_LG > .3:
            Block_PFlag_LG = 1
        else:
            Block_PFlag_LG = 0

        if block_PF_GO > .3:
            Block_PFlag_GO = 1
        else:
            Block_PFlag_GO = 0

        if block_PF_SSR < .2 or block_PF_SSR > .8:
            Block_PFlag_SSR = 1
        else:
            Block_PFlag_SSR = 0

        # Stop Fail RT > Go RT by any amount (1ms or greater)
        if block_SF_RT > block_Go_RT:
            Block_PF_SFRTvGRT = 1
        else:
            Block_PF_SFRTvGRT = 0

        thisExp.addData('Block_PF_TNG', Block_PF_TNG)
        thisExp.addData('Block_PFlag_CG', Block_PFlag_CG)
        thisExp.addData('Block_PFlag_IG', Block_PFlag_IG)
        thisExp.addData('Block_PFlag_LG', Block_PFlag_LG)
        thisExp.addData('Block_PFlag_GO', Block_PFlag_GO)
        thisExp.addData('Block_PFlag_SSR', Block_PFlag_SSR)
        thisExp.addData('Block_PF_SFRTvGRT', Block_PF_SFRTvGRT)
    TextComponent text_endfix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $final_end_fix_dur
      text [set every repeat] = +
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  Routine ITI
    TextComponent text_ITI
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text [set every repeat] = +
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    KeyboardComponent key_resp_ITI
      allowedKeys [set every repeat] = '6', '7'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      store = first key
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    CodeComponent code_ITI
      Code Type = Auto->JS
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      End Routine:
        # on variable stop trials, successful inhibition means 0 keypress throughout the trial including during the fixation and jitter
        # two types of inhibition "failure": 1. key press post SSD; 2. STE (stop trigger error): key  press during SSD before stop signal (participant's fast and correct hit)
        trial_count += 1
        if trial_type == 'VariableStopTrial':
            STEcount += STEflag
            if STEflag == 0:
                VST_count += 1
                if key_resp_image_stop.keys in ['', [], None] and key_resp_fix.keys in ['', [], None] and key_resp_ITI.keys in ['', [], None]:
                    PrevStopACC = 1
                    updated_trial_label = "stop_success"
                    SC += 1
                elif key_resp_image_stop.keys != None or key_resp_fix.keys != None or key_resp_ITI.keys != None:
                    PrevStopACC = 0
                    updated_trial_label = "stop_failure"
                    SF += 1
                    if key_resp_image_stop.keys != None:
                        SF_RT_sum = SF_RT_sum + SSD + key_resp_image_stop.rt
                    elif key_resp_image_stop.keys in ['', [], None] and key_resp_fix.keys != None:
                        SF_RT_sum = SF_RT_sum + SSD + .3 + key_resp_fix.rt
                    elif key_resp_image_stop.keys in ['', [], None] and key_resp_fix.keys in ['', [], None] and key_resp_ITI.keys != None:
                        SF_RT_sum = SF_RT_sum + SSD + .3 + FixDur + key_resp_ITI.rt
                    SF_RT = SF_RT_sum/SF
                if prev_VST_trial_num == 0:
                    real_stop_nback = trial_count - 1
                else:
                    real_stop_nback = trial_count - prev_VST_trial_num - 1
                prev_VST_trial_num = trial_count
            elif STEflag == 1:
                real_stop_nback = 0
                # as STE is no longer counted as a VST
                Go_trial_count += 1
                Go_RT_sum = Go_RT_sum + key_resp_go_stop_trial.rt
                Go_RT = Go_RT_sum/Go_trial_count
                if key_resp_go_stop_trial.keys in str(correct_answer):
                    updated_trial_label = "STE_correct_go"
                    CG += 1
                else:
                    updated_trial_label = "STE_incorrect_go"
                    IG += 1
        elif trial_type == 'GoTrial':
            Go_trial_count += 1
            real_stop_nback = 0
            if key_resp_go_stop_trial.keys != None:
                Go_RT_sum = Go_RT_sum + key_resp_go_stop_trial.rt
                Go_RT = Go_RT_sum/Go_trial_count
                if key_resp_go_stop_trial.keys in str(correct_answer):
                    updated_trial_label = "correct_go"
                    CG += 1
                else:
                    updated_trial_label = "incorrect_go"
                    IG += 1
            elif key_resp_go_stop_trial.keys in ['', [], None]:
                if key_resp_ITI.keys != None:
                    Go_RT_sum = Go_RT_sum + 1 + key_resp_ITI.rt
                    Go_RT = Go_RT_sum/Go_trial_count
                    # late go trials' fixation duration is always 0
                    # this errror include both correct and incorrect late gos during the ITI duration
                    updated_trial_label = "late_go"
                    LG += 1
                elif key_resp_ITI.keys in ['', [], None]:
                    Go_RT_sum = Go_RT_sum + 1 + jitter
                    Go_RT = Go_RT_sum/Go_trial_count
                    updated_trial_label = "go_omission"
                    GO += 1 # GO is go omission, unlike Go, which is go trials
        if VST_count > 0:
            PF_SSR = SC/VST_count
        if Go_trial_count > 0:
            PF_CG = CG/Go_trial_count
            PF_IG = IG/Go_trial_count
            PF_LG = LG/Go_trial_count
            PF_GO = GO/Go_trial_count
        # correct_go & incorrect_go are computed separately
        # from STE correct and incorrect go trials
        # only the first key press is recorded; please change if
        # you need. It may be over-complicated to examine additional key presses
        # (quick correction, multiple key presses)

        # the original ABCD's script also updates stop_nback in
        # the original list; this version tracks updated stop_nback
        # instead

        # Go_RT, calculated here, is the average response time on all types of Go trials including STE, go omissions
        # SF_RT, calculated here, is the average response time on only the failed stop trials

        # script debugging variables
        thisExp.addData('STEcount', STEcount)
        thisExp.addData('STEflag', STEflag)
        thisExp.addData('Real_trial_type', trial_type)
        thisExp.addData('image_stop_dur', image_stop_dur)
        thisExp.addData('updated_trial_label', updated_trial_label)
        thisExp.addData('go_stop_trial_dur', go_stop_trial_dur)
        thisExp.addData('SSD', SSD)
        thisExp.addData('FixDur', FixDur)
        thisExp.addData('real_stop_nback', real_stop_nback)

        thisExp.addData('recorded_key_resp_go_stop_trial', key_resp_go_stop_trial.rt)
        thisExp.addData('recorded_key_resp_image_stop.rt', key_resp_image_stop.rt)
        thisExp.addData('recorded_key_resp_fix.rt', key_resp_fix.rt)
        thisExp.addData('recorded_key_resp_ITI.rt', key_resp_ITI.rt)

        # constantly updated performance red flags
        # Go trial stats include STE trials as participants are naive to the actual trial type,
        # so their STE responses shall be included in computing their overall go trial performance

        # 1 means red flag
        # overall/cumulative performance
        thisExp.addData('trial_count', trial_count)
        thisExp.addData('Go_trial_count', Go_trial_count)
        thisExp.addData('VST_count', VST_count)
        thisExp.addData('CG', CG)
        thisExp.addData('IG', IG)
        thisExp.addData('LG', LG)
        thisExp.addData('GO', GO)
        thisExp.addData('SF', SF)
        thisExp.addData('SC', SC)
        thisExp.addData('PF_CG', PF_CG)
        thisExp.addData('PF_IG', PF_IG)
        thisExp.addData('PF_LG', PF_LG)
        thisExp.addData('PF_GO', PF_GO)
        thisExp.addData('PF_SSR', PF_SSR)
        thisExp.addData('SF_RT', SF_RT)
        thisExp.addData('Go_RT', Go_RT)
  Routine Goodbye
    CodeComponent code_goodbye
      Code Type = Auto->JS
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      Begin Routine:
        # Total no. Go trials < 300, for two completed runs (1 session)
        # 1 means red flag is present
        if PF_CG < .6:
            PFlag_CG = 1
        else:
            PFlag_CG = 0

        if PF_IG > .3:
            PFlag_IG = 1
        else:
            PFlag_IG = 0

        if PF_LG > .3:
            PFlag_LG = 1
        else:
            PFlag_LG = 0

        if PF_GO > .3:
            PFlag_GO = 1
        else:
            PFlag_GO = 0

        if PF_SSR < .2 or PF_SSR > .8:
            PFlag_SSR = 1
        else:
            PFlag_SSR = 0

        # Stop Fail RT > Go RT by any amount (1ms or greater)
        if SF_RT > Go_RT:
            PF_SFRTvGRT = 1
        else:
            PF_SFRTvGRT = 0

        thisExp.addData('PFlag_CG', PFlag_CG)
        thisExp.addData('PFlag_IG', PFlag_IG)
        thisExp.addData('PFlag_LG', PFlag_LG)
        thisExp.addData('PFlag_GO', PFlag_GO)
        thisExp.addData('PFlag_SSR', PFlag_SSR)
        thisExp.addData('PF_SFRTvGRT', PF_SFRTvGRT)
    TextComponent text_goodbye
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text:
        All done!

        Please tell the experimenter you are finished.
    KeyboardComponent key_resp_goodbye
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Eye_tracking
    CodeComponent code_eye_tracking
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        import lcniEye

        lcniEye.Connect(win, filename)
        lcniEye.Calibrate(win)

        lcniEye.StartRecord()
  Routine Practice_feedback
    CodeComponent code_block_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        # default block feedback msg when no block-based red flag was raised
        block_feedback_msg = ''
      Begin JS Routine:
        /*
        informing participants about their mean RT on go trials,
        number of go omissions (with a reminder that this should be 0),
        and p(respond|signal) (with a reminder that this should be close to .50).
        The feedback could even include an explicit measure of response slowing. (Verbruggen et al., 2019)*/
        var block_feedback_msg, block_variable_stop_trial_success_percentage;
        block_variable_stop_trial_success_percentage = (PF_SSR * 100);
        block_feedback_msg = `When you saw a left/right arrow,
        your average response time was ${Math.round(Go_RT, 1)} sec,
        and you did not respond for ${GO} time(s).
        When you saw an up arrow,
        you stopped responding ${Math.round(block_variable_stop_trial_success_percentage, 1)} percent of the time.
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      Begin Routine:
        '''
        informing participants about their mean RT on go trials,
        number of go omissions (with a reminder that this should be 0),
        and p(respond|signal) (with a reminder that this should be close to .50).
        The feedback could even include an explicit measure of response slowing. (Verbruggen et al., 2019)
        '''
        block_variable_stop_trial_success_percentage = PF_SSR*100
        # the probability of responding to the stop signals. My understanding is p(respond|signal) = 1-p(inhibit|signal) and here premature (STEs) are not included in the computation
        # it is suggested that <.25 or >.75 may mean that SSRT estimation becomes unreliable
        block_feedback_msg = 'When you saw a left/right arrow,\nyour average response time was %s sec,\nand you did not respond for %s time(s).\nWhen you saw an up arrow,\nyou stopped responding %s percent of the time.\n\n%s%s%s%s%s%s'%(round(Go_RT,1), GO, round(block_variable_stop_trial_success_percentage,1), PFlag_CG, PFlag_IG, PFlag_LG, PFlag_GO, PFlag_SSR, PF_SFRTvGRT)
        '''
        #block_feedback
        if PF_CG < .6:
            Block_PFlag_CG = 1
            # many false responses, late responses or omissions
        else:
            Block_PFlag_CG = 0

        if PF_IG > .3:
            Block_PFlag_IG = 1
            # many false responses
        else:
            Block_PFlag_IG = 0

        if PF_LG > .3:
            Block_PFlag_LG = 1
            # many late response
        else:
            Block_PFlag_LG = 0

        if PF_GO > .3:
            Block_PFlag_GO = 1
            # many omissions
        else:
            Block_PFlag_GO = 0

        if PF_SSR < .2 or PF_SSR > .8:
            Block_PFlag_SSR = 1
            # many inhibition failures (impulsivity or misunderstand instructions) OR too many inhibition success (may be due to slow responding, i.e. waiting for the up arrrow)
        else:
            Block_PFlag_SSR = 0

        # Stop Fail RT > Go RT by any amount (1ms or greater)
        if SF_RT > Go_RT:
            Block_PF_SFRTvGRT = 1
            # many inhibition failures (impulsivity or misunderstand instructions)
        else:
            Block_PF_SFRTvGRT = 0
        '''
    TextComponent text_block_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_feedback_msg
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    KeyboardComponent key_resp_block_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    CodeComponent code_instructions
      Code Type = Auto->JS
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      Begin Experiment:
        instruction_image = 'images/Instructions_Scanner_RightHanded.bmp'
        right_arrow_key = 'MIDDLE'
        left_arrow_key = 'POINTER'

        if expInfo['handedness(l/r/a)'] == 'l':
            instruction_image = 'images/Instructions_Scanner_LeftHanded.bmp'
            right_arrow_key = 'POINTER'
            left_arrow_key = 'MIDDLE'
    ImageComponent image_instructions
      image = $instruction_image
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_instructions
      allowedKeys = '6', '7', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine TitlePage
  Routine Instructions
  Routine TestReady
  Routine BeginFix
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = Practice_list.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial_type': 'GoTrial', 'stimulus': 'images/Left_Arrow.bmp', 'jitter_ms': 955, 'stop_nback': None, 'go_stimuli_correct_answer': 'left', 'jitter': 0.955, 'updated_go_stimuli_correct_answer': 6},
      {'trial_type': 'GoTrial', 'stimulus': 'images/Right_Arrow.bmp', 'jitter_ms': 925, 'stop_nback': None, 'go_stimuli_correct_answer': 'right', 'jitter': 0.925, 'updated_go_stimuli_correct_answer': 7},
      {'trial_type': 'GoTrial', 'stimulus': 'images/Right_Arrow.bmp', 'jitter_ms': 925, 'stop_nback': None, 'go_stimuli_correct_answer': 'right', 'jitter': 0.925, 'updated_go_stimuli_correct_answer': 7},
      {'trial_type': 'GoTrial', 'stimulus': 'images/Left_Arrow.bmp', 'jitter_ms': 865, 'stop_nback': None, 'go_stimuli_correct_answer': 'left', 'jitter': 0.865, 'updated_go_stimuli_correct_answer': 6},
      {'trial_type': 'GoTrial', 'stimulus': 'images/Left_Arrow.bmp', 'jitter_ms': 1045, 'stop_nback': None, 'go_stimuli_correct_answer': 'left', 'jitter': 1.045, 'updated_go_stimuli_correct_answer': 6},
      {'trial_type': 'VariableStopTrial', 'stimulus': 'images/Right_Arrow.bmp', 'jitter_ms': 790, 'stop_nback': 5, 'go_stimuli_correct_answer': 'right', 'jitter': 0.79, 'updated_go_stimuli_correct_answer': 7},
      {'trial_type': 'GoTrial', 'stimulus': 'images/Right_Arrow.bmp', 'jitter_ms': 745, 'stop_nback': None, 'go_stimuli_correct_answer': 'right', 'jitter': 0.745, 'updated_go_stimuli_correct_answer': 7}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
    Routine Go_Stop_trial
    Routine Fix
    Routine ITI
  LoopTerminator trials_loop
  Routine Goodbye
  Routine Practice_feedback
