PsychoPy2experiment version="2022.1.3"
Settings
  Data filename = u'data/%s_%s_%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'], expInfo['visit'], expInfo['run'])
  Experiment info = {'participant': '', 'visit': '001/002', 'run': '001', 'trialorder': '1', 'handedness(l/r/a)': 'r'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = 220722_SST_ABCD_scanner_version
  keyboardBackend = ioHub
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Routines
  Routine TitlePage
    TextComponent text_titlepage
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = SST
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    KeyboardComponent key_resp_titlepage
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_titlepage
      Code Type = Auto->JS
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      Before Experiment:
        '''
        PI: BJ Casey

        Stop Signal Task
        - Optional practice block (25 trials, ~1min)
        - 2 test runs; ~5min each
        - 300 "Go" trials, 60 variable-delay "stop" trials; divided equally between the 2 runs
        - "Stop" trials are separated by 3-7 "go" trials
        - "Go" trials:
            + R/L arrow displayed for up to 1000ms
            + if there is a response, screen immediately advances to a fixation cross, otherwise, arrow remains for 1000ms
            + fixation cross displayed for 1000ms - "go" duration + jitter
        - Variable-delay "Stop" trails:
            + R/L arrow (SSD) displayed for 0-900ms; duration is adjusted on a trial-by-trial basis; starting at 50ms, duration is increased or decreased by 50ms (up to a max duration of 900ms) based on the the subject's performance/accuracy on prior "stop" trial (i.e. if previous stop trial was incorrect, the SSD duration of the next stop trial is decreased by 50ms; if previous stop trial was correct, the SSD duration of the next stop trial is increased by 50ms. If a response is detected within this window, screen immediately advances to fixation cross.
            + "stop" signal (up arrow) is displayed for 100-300ms; note: variable "go" duration + "stop" signal duration not to exceed 1000ms.
            + fixation cross displayed for 1000ms - variable "go" duration - "stop" signal duration(if presented) + jitter
        '''
      Begin Experiment:
        right_arrow_key = 'MIDDLE'
        left_arrow_key = 'POINTER'
        allowed_index_key = '6'
        allowed_middle_key = '7'
        dominant_hand = 'right'
        if expInfo['handedness(l/r/a)'] == 'l':
            right_arrow_key = 'POINTER'
            left_arrow_key = 'MIDDLE'
            allowed_index_key = '3'
            allowed_middle_key = '2'
            dominant_hand = 'left'
  Routine Waiting4Scanner
    TextComponent text_waiting4scanner
      letterHeight = .12
      startVal [time (s)] = 1
      text = Waiting for scanner...
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    KeyboardComponent key_resp_waiting4scanner
      allowedKeys = 'apostrophe'
      forceEndRoutine = True
      startVal [time (s)] = 1
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    TextComponent text_scanner_wait
      letterHeight = .12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine BeginFix
    TextComponent text_beginfix
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    CodeComponent code_select_run
      Code Type = Auto->JS
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      Begin Experiment:
        run_counter = 0
      Begin Routine:
        # variables that refresh after each run/block
        block_trial_count = 0
        run_counter += 1

        go_stop_trial_dur_frames = int(1*1000/(1000/round(expInfo['frameRate'])))
        SSD = .05
        PrevStopACC = 0
        STEflag = 0
        STEcount = 0
        STEadjstop_nback = 0
        updated_trial_label = ''
        prev_VST_trial_num = 0
        real_stop_nback = 0
        block_VST_count = 0

        # block-based performance variables refresh for each run
        block_Go_trial_count = 0
        block_VST_count = 0
        block_CG = 0
        block_IG = 0
        block_LG = 0
        block_GO = 0
        block_SF = 0
        block_SC = 0
        block_PF_CG = 0
        block_PF_IG = 0
        block_PF_LG = 0
        block_PF_GO = 0
        block_PF_SSR = 0
        block_SF_RT = 0
        block_SF_RT_sum = 0
        block_Go_RT = 0
        block_Go_RT_sum = 0

        Block_PF_TNG = 0
        Block_PFlag_CG = 0
        Block_PFlag_IG = 0
        Block_PFlag_LG = 0
        Block_PFlag_GO = 0
        Block_PFlag_SSR = 0
        Block_PF_SFRTvGRT = 0

        block_variable_stop_trial_success_percentage= 0
      End Routine:
        if int(expInfo['run']) == 1 and run_counter == 1:
            if int(expInfo['trialorder']) == 1:
                conditions_file = 'Time_versions/TestList1A.xlsx'
        else:
            conditions_file = 'Time_versions/TestList1B.xlsx'

        # record frame duration after system initialization
        # send warning if frames are dropped
        # 4ms difference is tolerated as 4ms*180trials <1s
        '''win = visual.Window()
        win.recordFrameIntervals = True
        logging.console.setLevel(logging.WARNING)
        print('Overall, %i frames were dropped.' % win.nDroppedFrames)
        '''
  Routine Go_Stop_trial
    CodeComponent code_go_stop_trial
      Code Type = Auto->JS
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      Begin Experiment:
        trial_count = 0

        # Xi added performance red flags
        # Correct Go < 60%
        PF_CG = 0
        # Incorrect Go > 30%
        PF_IG = 0
        # Late Go > 30%
        PF_LG = 0
        # Go Omissions > 30%
        PF_GO = 0
        # Total no. Go trials < 300, for two completed runs (1 session)
        PF_TNG = 0
        Go_trial_count = 0
        VST_count = 0
        # Stop Success Rate < 20% or > 80%
        PF_SSR = 0
        # Stop Fail RT > Go RT by any amount (1ms or greater)
        PF_SFRTvGRT = 0
        CG = 0
        IG = 0
        LG = 0
        GO = 0
        SC = 0
        SF = 0
        SF_RT = 0
        SF_RT_sum = 0
        Go_RT = 0
        Go_RT_sum = 0
        PFlag_CG = 0
        PFlag_IG = 0
        PFlag_LG = 0
        PFlag_GO = 0
        PFlag_SSR = 0
      Begin Routine:
        if STEflag == 1:
            trial_type = 'VariableStopTrial'

        if trial_type == 'GoTrial':
            image_stimulus_dur_frames = int(1*1000/(1000/expInfo['frameRate']))
            image_stop_dur_frames = 0
        elif trial_type == 'VariableStopTrial':
            if STEflag == 0:
                if block_VST_count > 0:
                    SSD = SSD + (PrevStopACC*2-1) *.05
                    # if the previous VST inhibition is successful, the next VST gets harder with longer SSD
                    # if the previous VST inhibition is unsuccessful, the next VST gets easier with shorter SSD
                    if SSD < .05:
                        SSD = .05
                        # based on the paper, SSD min will be 50ms, so the go sign will always be presented on VSTs
                    elif SSD > .9:
                        SSD = .9
                        # this is the SSDmax in ABCD's version
                        # it appears that VST length >1sec is later compensated by shorter end fixation duration (5s by default)
                        # however, this is not shown in the ABCD's script
                # first ever stop trial, SSD is defaulted to be 50ms
            elif STEflag == 1:
                if SSD < .1 or SSD == .1:
                    SSD = .05
                    STEflag = 0
                else:
                    SSD = SSD - .1
                    STEflag = 0
            image_stimulus_dur_frames = int(SSD*1000/(1000/expInfo['frameRate']))
            image_stop_dur_frames = int(.3*1000/(1000/expInfo['frameRate']))
      End Routine:
        if trial_type == 'VariableStopTrial':
            if key_resp_image_stimulus.keys in ['', [], None]:
                STEflag = 0
            else:
                STEflag = 1
    ImageComponent image_stimulus
      image [set every repeat] = $stimulus
      size = (2, 2)
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $image_stimulus_dur_frames
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    KeyboardComponent key_resp_image_stimulus
      allowedKeys [set every repeat] = allowed_middle_key, allowed_index_key
      forceEndRoutine = True
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $image_stimulus_dur_frames
      store = first key
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    ImageComponent image_stop
      image [set every repeat] = images/Stop_Arrow.BMP
      size = (2, 2)
      startVal [condition] = $image_stimulus.status==FINISHED
      stopVal [duration (frames)] = $image_stop_dur_frames
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    KeyboardComponent key_resp_image_stop
      allowedKeys [set every repeat] = allowed_middle_key, allowed_index_key
      correctAns = None
      forceEndRoutine = False
      startVal [condition] = $image_stimulus.status==FINISHED
      stopVal [duration (frames)] = $image_stop_dur_frames
      store = first key
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  Routine Fix
    CodeComponent code_fix
      Code Type = Auto->JS
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      Begin Experiment:
        FixDur_frames = 0

        '''
        double check: does this mean correct response during the fixation
        is also coded as hit?
        'Set TrialCode
        If Go.ACC = 1 Or Fix.RESP = c.GetAttrib("CorrectAnswer") Then
         c.SetAttrib "TrialCode", "CorrectGo"
        Else
         c.SetAttrib "TrialCode", "IncorrectGo"
        End If
        '''
      Begin Routine:
        #Calculate trial fixation duration
        if trial_type == 'GoTrial':
            if key_resp_image_stimulus.keys != None:
                # to make timing more accurate
                FixDur_frames = int((1 - key_resp_image_stimulus.rt + jitter)*1000/(1000/expInfo['frameRate']))
            else:
                FixDur_frames = int(jitter*1000/(1000/expInfo['frameRate']))
        elif trial_type == 'VariableStopTrial':
            if STEflag == 0:
                #if key_resp_image_stimulus.keys in ['', [], None]:
                FixDur_frames = int((1 - SSD - .3 + jitter)*1000/(1000/expInfo['frameRate']))
                #elif key_resp_image_stop.keys != None:
                    # FixDur = 1 - SSD - key_resp_image_stop.rt + jitter
                    # ABCD's 21 version: so failed inhibition when the stop sign came up
                    # may make a trial longer (.3-key_resp_image_stop.rt)
            if STEflag == 1:
                FixDur_frames = int((1 - key_resp_image_stimulus.rt + jitter)*1000/(1000/expInfo['frameRate']))
                # FixDur = 1 - key_resp_image_stimulus.rt - .3 + jitter
                # ABCD's 21 version, so STE makes a trial shorter
      End Routine:
        # on variable stop trials, successful inhibition means 0 keypress throughout the trial including during the fixation and jitter
        # two types of inhibition "failure": 1. key press post SSD; 2. STE (stop trigger error): key  press during SSD before stop signal (participant's fast and correct hit)
        block_trial_count += 1
        trial_count += 1
        if trial_type == 'GoTrial':
            block_Go_trial_count += 1
            Go_trial_count += 1
            real_stop_nback = 0
            if key_resp_image_stimulus.keys != None:
                block_Go_RT_sum = block_Go_RT_sum + key_resp_image_stimulus.rt
                Go_RT_sum = Go_RT_sum + key_resp_image_stimulus.rt
                block_Go_RT = block_Go_RT_sum/block_Go_trial_count
                Go_RT = Go_RT_sum/Go_trial_count
                if key_resp_image_stimulus.keys in str(correct_answer):
                    updated_trial_label = "correct_go"
                    block_CG += 1
                    CG += 1
                else:
                    updated_trial_label = "incorrect_go"
                    block_IG += 1
                    IG += 1
            elif key_resp_image_stimulus.keys in ['', [], None]:
                if key_resp_fix.keys in ['', [], None]:
                    # go omission's RT is regarded to be the trial duration
                    # if this calculation is not ideal, please remove GO trials
                    # in your later go rt calculation
                    block_Go_RT_sum = block_Go_RT_sum + 1 + jitter
                    Go_RT_sum = Go_RT_sum + 1 + jitter
                    block_Go_RT = block_Go_RT_sum/block_Go_trial_count
                    Go_RT = Go_RT_sum/Go_trial_count
                    updated_trial_label = "go_omission"
                    block_GO += 1 # GO is go omission, unlike Go, which is go trials
                    GO += 1
                elif key_resp_fix.keys != None:
                    block_Go_RT_sum = block_Go_RT_sum + 1 + key_resp_fix.rt
                    Go_RT_sum = Go_RT_sum + 1 + key_resp_fix.rt
                    block_Go_RT = block_Go_RT_sum/block_Go_trial_count
                    Go_RT = Go_RT_sum/Go_trial_count
                    # this errror include both correct and incorrect late gos during the fixation
                    updated_trial_label = "late_go"
                    block_LG += 1
                    LG += 1
        elif trial_type == 'VariableStopTrial':
            STEcount += STEflag
            if STEflag == 0:
                block_VST_count += 1
                VST_count += 1
                if key_resp_image_stop.keys in ['', [], None] and key_resp_fix.keys in ['', [], None]:
                    PrevStopACC = 1
                    updated_trial_label = "stop_correct"
                    block_SC += 1
                    SC += 1
                elif key_resp_image_stop.keys != None or key_resp_fix.keys != None:
                    PrevStopACC = 0
                    updated_trial_label = "stop_failure"
                    block_SF += 1
                    SF += 1
                    if key_resp_image_stop.keys != None:
                        block_SF_RT_sum = block_SF_RT_sum + SSD + key_resp_image_stop.rt
                        SF_RT_sum = SF_RT_sum + SSD + key_resp_image_stop.rt
                    elif key_resp_image_stop.keys in ['', [], None] and key_resp_fix.keys != None:
                        block_SF_RT_sum = block_SF_RT_sum + SSD + .3 + key_resp_fix.rt
                        SF_RT_sum = SF_RT_sum + SSD + .3 + key_resp_fix.rt
                    block_SF_RT = block_SF_RT_sum/block_SF
                    SF_RT = SF_RT_sum/SF
                if prev_VST_trial_num == 0:
                    real_stop_nback = block_trial_count - 1
                else:
                    real_stop_nback = block_trial_count - prev_VST_trial_num - 1
                prev_VST_trial_num = block_trial_count
            elif STEflag == 1:
                block_Go_trial_count += 1
                real_stop_nback = 0
                # as STE is no longer counted as a VST in this version
                Go_trial_count += 1
                block_Go_RT_sum = block_Go_RT_sum + key_resp_image_stimulus.rt
                Go_RT_sum = Go_RT_sum + key_resp_image_stimulus.rt
                block_Go_RT = block_Go_RT_sum/block_Go_trial_count
                Go_RT = Go_RT_sum/Go_trial_count
                if key_resp_image_stimulus.keys in str(correct_answer):
                    updated_trial_label = "STE_correct_go"
                    block_CG += 1
                    CG += 1
                else:
                    updated_trial_label = "STE_incorrect_go"
                    block_IG += 1
                    IG += 1

        if block_VST_count > 0:
            block_PF_SSR = block_SC/block_VST_count
            PF_SSR = SC/VST_count
        if block_Go_trial_count > 0:
            block_PF_CG = block_CG/block_Go_trial_count
            PF_CG = CG/Go_trial_count
            block_PF_IG = block_IG/block_Go_trial_count
            PF_IG = IG/Go_trial_count
            block_PF_LG = block_LG/block_Go_trial_count
            PF_LG = LG/Go_trial_count
            block_PF_GO = block_GO/block_Go_trial_count
            PF_GO = GO/Go_trial_count
        # correct_go & incorrect_go are computed separately
        # from STE correct and incorrect go trials
        # only the first key press is recorded; please change if
        # you need. It may be over-complicated to examine additional key presses
        # (quick correction, multiple key presses)

        # the original ABCD's script also updates stop_nback in
        # the original list; this version tracks updated stop_nback
        # instead

        # Go_RT, calculated here, is the average response time on all types of Go trials including STE, go omissions
        # SF_RT, calculated here, is the average response time on only the failed stop trials

        thisExp.addData('updated_trial_label', updated_trial_label)
        thisExp.addData('real_stop_nback', real_stop_nback)

        '''script debugging variables
        thisExp.addData('STEflag', STEflag)
        thisExp.addData('image_stop_dur_frames', image_stop_dur_frames)
        thisExp.addData('image_stimulus_dur_frames', image_stimulus_dur_frames)
        thisExp.addData('SSD', SSD)
        thisExp.addData('FixDur', FixDur_frames)

        thisExp.addData('recorded_key_resp_go_stop_trial', key_resp_image_stimulus.rt)
        thisExp.addData('recorded_key_resp_image_stop.rt', key_resp_image_stop.rt)
        thisExp.addData('recorded_key_resp_fix.rt', key_resp_fix.rt)

        # constantly updated performance red flags
        # Go trial stats include STE trials as participants are naive to the actual trial type,
        # so their STE responses shall be included in computing their overall go trial performance

        # 1 means red flag
        thisExp.addData('block_trial_count', block_trial_count)
        thisExp.addData('block_Go_trial_count', block_Go_trial_count)
        thisExp.addData('block_VST_count', block_VST_count)
        thisExp.addData('block_CG', block_CG)
        thisExp.addData('block_IG', block_IG)
        thisExp.addData('block_LG', block_LG)
        thisExp.addData('block_GO', block_GO)
        thisExp.addData('block_SF', block_SF)
        thisExp.addData('block_SC', block_SC)
        thisExp.addData('block_PF_CG', block_PF_CG)
        thisExp.addData('block_PF_IG', block_PF_IG)
        thisExp.addData('block_PF_LG', block_PF_LG)
        thisExp.addData('block_PF_GO', block_PF_GO)
        thisExp.addData('block_PF_SSR', block_PF_SSR)
        thisExp.addData('block_SF_RT', block_SF_RT)
        thisExp.addData('block_Go_RT', block_Go_RT)

        # overall/cumulative performance
        thisExp.addData('trial_count', trial_count)
        thisExp.addData('Go_trial_count', Go_trial_count)
        thisExp.addData('VST_count', VST_count)
        thisExp.addData('CG', CG)
        thisExp.addData('IG', IG)
        thisExp.addData('LG', LG)
        thisExp.addData('GO', GO)
        thisExp.addData('SF', SF)
        thisExp.addData('SC', SC)
        thisExp.addData('PF_CG', PF_CG)
        thisExp.addData('PF_IG', PF_IG)
        thisExp.addData('PF_LG', PF_LG)
        thisExp.addData('PF_GO', PF_GO)
        thisExp.addData('PF_SSR', PF_SSR)
        thisExp.addData('SF_RT', SF_RT)
        thisExp.addData('Go_RT', Go_RT)
        '''
    TextComponent text_fix
      letterHeight = 0.3
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $FixDur_frames
      text [set every repeat] = +
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    KeyboardComponent key_resp_fix
      allowedKeys [set every repeat] = allowed_middle_key, allowed_index_key
      correctAns = None
      forceEndRoutine = False
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $FixDur_frames
      store = first key
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  Routine EndFix
    CodeComponent code_endfix
      Code Type = Auto->JS
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      End Routine:
        thisExp.addData('run_counter', run_counter)
        thisExp.addData('trial_count', trial_count)
        thisExp.addData('block_trial_count', block_trial_count)

        #block_feedback
        if block_PF_CG < .6:
            Block_PFlag_CG = 1
        else:
            Block_PFlag_CG = 0

        if block_PF_IG > .3:
            Block_PFlag_IG = 1
        else:
            Block_PFlag_IG = 0

        if block_PF_LG > .3:
            Block_PFlag_LG = 1
        else:
            Block_PFlag_LG = 0

        if block_PF_GO > .3:
            Block_PFlag_GO = 1
        else:
            Block_PFlag_GO = 0

        if block_PF_SSR < .2 or block_PF_SSR > .8:
            Block_PFlag_SSR = 1
        else:
            Block_PFlag_SSR = 0

        # Stop Fail RT > Go RT by any amount (1ms or greater)
        if block_SF_RT > block_Go_RT:
            Block_PF_SFRTvGRT = 1
        else:
            Block_PF_SFRTvGRT = 0

        thisExp.addData('Block_PF_TNG', Block_PF_TNG)
        thisExp.addData('Block_PFlag_CG', Block_PFlag_CG)
        thisExp.addData('Block_PFlag_IG', Block_PFlag_IG)
        thisExp.addData('Block_PFlag_LG', Block_PFlag_LG)
        thisExp.addData('Block_PFlag_GO', Block_PFlag_GO)
        thisExp.addData('Block_PFlag_SSR', Block_PFlag_SSR)
        thisExp.addData('Block_PF_SFRTvGRT', Block_PF_SFRTvGRT)
    TextComponent text_endfix
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $end_fix_dur
      text [set every repeat] = +
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  Routine ITI
    TextComponent text_ITI
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text [set every repeat] = +
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    KeyboardComponent key_resp_ITI
      allowedKeys [set every repeat] = allowed_middle_key, allowed_index_key
      correctAns = None
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      store = first key
      storeCorrect = True
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    CodeComponent code_ITI
      Code Type = Auto->JS
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  Routine Goodbye
    CodeComponent code_goodbye
      Code Type = Auto->JS
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      Begin Routine:
        # Total no. Go trials < 300, for two completed runs (1 session)
        # 1 means red flag is present
        if Go_trial_count < 300:
            PF_TNG = 1
        else:
            PF_TNG = 0

        if PF_CG < .6:
            PFlag_CG = 1
        else:
            PFlag_CG = 0

        if PF_IG > .3:
            PFlag_IG = 1
        else:
            PFlag_IG = 0

        if PF_LG > .3:
            PFlag_LG = 1
        else:
            PFlag_LG = 0

        if PF_GO > .3:
            PFlag_GO = 1
        else:
            PFlag_GO = 0

        if PF_SSR < .2 or PF_SSR > .8:
            PFlag_SSR = 1
        else:
            PFlag_SSR = 0

        # Stop Fail RT > Go RT by any amount (1ms or greater)
        if SF_RT > Go_RT:
            PF_SFRTvGRT = 1
        else:
            PF_SFRTvGRT = 0

        thisExp.addData('PF_TNG', PF_TNG)
        thisExp.addData('PFlag_CG', PFlag_CG)
        thisExp.addData('PFlag_IG', PFlag_IG)
        thisExp.addData('PFlag_LG', PFlag_LG)
        thisExp.addData('PFlag_GO', PFlag_GO)
        thisExp.addData('PFlag_SSR', PFlag_SSR)
        thisExp.addData('PF_SFRTvGRT', PF_SFRTvGRT)
    TextComponent text_goodbye
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text = All done!
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    KeyboardComponent key_resp_goodbye
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Eye_tracking
    CodeComponent code_eye_tracking
      Code Type = Auto->JS
      disabled = True
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      Begin Experiment:
        import lcniEye

        lcniEye.Connect(win, filename)
        lcniEye.Calibrate(win)

        lcniEye.StartRecord()
  Routine Block_feedback
    CodeComponent code_block_feedback
      Code Type = Auto->JS
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      Begin Experiment:
        # default block feedback msg when no block-based red flag was raised
        block_feedback_msg = ''
      Begin JS Routine:
        /*
        informing participants about their mean RT on go trials,
        number of go omissions (with a reminder that this should be 0),
        and p(respond|signal) (with a reminder that this should be close to .50).
        The feedback could even include an explicit measure of response slowing. (Verbruggen et al., 2019)*/
        var block_feedback_msg, block_variable_stop_trial_success_percentage;
        block_variable_stop_trial_success_percentage = (block_PF_SSR * 100);
        block_feedback_msg = `When you saw a left/right arrow,
        your average response time was ${Math.round(block_Go_RT, 1)} sec,
        and you did not respond for ${block_GO} time(s).
        When you saw an up arrow,
        you stopped responding ${Math.round(block_variable_stop_trial_success_percentage, 1)} percent of the time.
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      Begin Routine:
        '''
        informing participants about their mean RT on go trials,
        number of go omissions (with a reminder that this should be 0),
        and p(respond|signal) (with a reminder that this should be close to .50).
        The feedback could even include an explicit measure of response slowing. (Verbruggen et al., 2019)
        '''
        block_variable_stop_trial_success_percentage = block_PF_SSR*100
        # the probability of responding to the stop signals. My understanding is p(respond|signal) = 1-p(inhibit|signal) and here premature (STEs) are not included in the computation
        # it is suggested that <.25 or >.75 may mean that SSRT estimation becomes unreliable
        block_feedback_msg = 'When you saw a left/right arrow,\nyour average response time was %s sec,\nand you did not respond for %s time(s).\nWhen you saw an up arrow,\nyou stopped responding %s percent of the time.\n\n%s%s%s%s%s%s'%(round(block_Go_RT,1), block_GO, round(block_variable_stop_trial_success_percentage,1), Block_PFlag_CG, Block_PFlag_IG, Block_PFlag_LG, Block_PFlag_GO, Block_PFlag_SSR, Block_PF_SFRTvGRT)
        '''
        #block_feedback
        if PF_CG < .6:
            Block_PFlag_CG = 1
            # many false responses, late responses or omissions
        else:
            Block_PFlag_CG = 0

        if PF_IG > .3:
            Block_PFlag_IG = 1
            # many false responses
        else:
            Block_PFlag_IG = 0

        if PF_LG > .3:
            Block_PFlag_LG = 1
            # many late response
        else:
            Block_PFlag_LG = 0

        if PF_GO > .3:
            Block_PFlag_GO = 1
            # many omissions
        else:
            Block_PFlag_GO = 0

        if PF_SSR < .2 or PF_SSR > .8:
            Block_PFlag_SSR = 1
            # many inhibition failures (impulsivity or misunderstand instructions) OR too many inhibition success (may be due to slow responding, i.e. waiting for the up arrrow)
        else:
            Block_PFlag_SSR = 0

        # Stop Fail RT > Go RT by any amount (1ms or greater)
        if SF_RT > Go_RT:
            Block_PF_SFRTvGRT = 1
            # many inhibition failures (impulsivity or misunderstand instructions)
        else:
            Block_PF_SFRTvGRT = 0
        '''
    TextComponent text_block_feedback
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $block_feedback_msg
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    KeyboardComponent key_resp_block_feedback
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestReady1
    CodeComponent code_testready1
      Code Type = Auto->JS
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      Begin Routine:
        test_ready_instruction1 = 'We are now ready to begin the game! \n\nPress your %s pointer finger to continue.'%(dominant_hand)
    TextComponent text_testready1
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_ready_instruction1
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    KeyboardComponent key_resp_testready1
      allowedKeys = allowed_index_key, 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestReady2
    CodeComponent code_testready2
      Code Type = Auto->JS
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      Begin Routine:
        test_ready_instruction2 = 'REMEMBER: When you see the LEFT arrow, press your %s %s finger.\nWhen you see the RIGHT arrow, press your %s %s finger.\n\nPress your %s pointer finger to continue.'%(dominant_hand, left_arrow_key, dominant_hand, right_arrow_key, dominant_hand)
    TextComponent text_testready2
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_ready_instruction2
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    KeyboardComponent key_resp_testready2
      allowedKeys = allowed_index_key, 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestReady3
    CodeComponent code_testready3
      Code Type = Auto->JS
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      Begin Routine:
        test_ready_instruction3 = 'If you see an UP arrow, STOP yourself from pressing to the left or the right arrow.\n\nPress your %s middle finger to continue.'%(dominant_hand)
    TextComponent text_testready3
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_ready_instruction3
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    KeyboardComponent key_resp_test_ready3
      allowedKeys = allowed_middle_key, 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TestReady4
    CodeComponent code_testready4
      Code Type = Auto->JS
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      Begin Routine:
        test_ready_instruction4 = 'Press the correct key as FAST as you can. Stopping and going are equally important!\n\nPress your %s middle finger to continue.'%(dominant_hand)
    TextComponent text_testready4
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_ready_instruction4
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    KeyboardComponent key_resp_testready4
      allowedKeys = allowed_middle_key, 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine TitlePage
  LoopInitiator trials_RunProc loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = (3-int(expInfo['run']))
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    Routine TestReady1
    Routine TestReady2
    Routine TestReady3
    Routine TestReady4
    Routine Waiting4Scanner
    Routine BeginFix
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = $conditions_file
      loopType = sequential
      nReps = 1
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      Routine Go_Stop_trial
      Routine Fix
    LoopTerminator trials_loop
    Routine EndFix
    Routine Block_feedback
  LoopTerminator trials_RunProc
  Routine Goodbye
